PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = pygame
  Data filename = u'data/%s_%s_%s_%s_%s' % (expInfo['participant'], expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'], expInfo['date'])
  Experiment info = {'participant': '', 'train_first': '', '00_coordinate': '', 'starting corner': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/instructions/Slide21.png', 'stimuli/instructions/Slide22.png', 'conditions/inputInstr_1.xlsx', 'conditions/inputInstr_2.xlsx', 'conditions/inputInstr_3.xlsx', 'conditions/inputTest.xlsx', 'conditions/inputTrain_1.xlsx', 'conditions/inputTrain_2.xlsx', 'conditions/inputTrain_3.xlsx', 'stimuli/stimuli_consent/Slide1.png', 'stimuli/stimuli_consent/Slide2.png', 'stimuli/stimuli_consent/Slide3.png', 'conditions/consent.xlsx', 'stimuli/instructions/Slide20.png', 'stimuli/instructions/Slide19.png', 'stimuli/instructions/Slide18.png', 'stimuli/instructions/Slide17.png', 'stimuli/instructions/Slide16.png', 'stimuli/instructions/Slide15.png', 'stimuli/instructions/Slide14.png', 'stimuli/instructions/Slide13.png', 'stimuli/instructions/Slide12.png', 'stimuli/instructions/Slide11.png', 'stimuli/instructions/Slide10.png', 'stimuli/instructions/Slide9.png', 'stimuli/instructions/Slide8.png', 'stimuli/instructions/Slide7.png', 'stimuli/instructions/Slide6.png', 'stimuli/instructions/Slide5.png', 'stimuli/instructions/Slide4.png', 'stimuli/instructions/Slide3.png', 'stimuli/instructions/Slide2.png', 'stimuli/instructions/Slide1.png', 'stimuli/kisspng-laptop-computer-keyboard-macbook-pro-macbook-air-k-5b0a8d08cac581.8511277215274181208306.png', 'stimuli/pngfind.com-search-icon-png-1821523.png', 'stimuli/alien_stimuli/11.png', 'stimuli/alien_stimuli/12.png', 'stimuli/alien_stimuli/13.png', 'stimuli/alien_stimuli/14.png', 'stimuli/alien_stimuli/15.png', 'stimuli/alien_stimuli/16.png', 'stimuli/alien_stimuli/21.png', 'stimuli/alien_stimuli/22.png', 'stimuli/alien_stimuli/23.png', 'stimuli/alien_stimuli/24.png', 'stimuli/alien_stimuli/25.png', 'stimuli/alien_stimuli/26.png', 'stimuli/alien_stimuli/31.png', 'stimuli/alien_stimuli/32.png', 'stimuli/alien_stimuli/33.png', 'stimuli/alien_stimuli/34.png', 'stimuli/alien_stimuli/35.png', 'stimuli/alien_stimuli/36.png', 'stimuli/alien_stimuli/41.png', 'stimuli/alien_stimuli/42.png', 'stimuli/alien_stimuli/43.png', 'stimuli/alien_stimuli/44.png', 'stimuli/alien_stimuli/45.png', 'stimuli/alien_stimuli/46.png', 'stimuli/alien_stimuli/51.png', 'stimuli/alien_stimuli/52.png', 'stimuli/alien_stimuli/53.png', 'stimuli/alien_stimuli/54.png', 'stimuli/alien_stimuli/55.png', 'stimuli/alien_stimuli/56.png', 'stimuli/alien_stimuli/61.png', 'stimuli/alien_stimuli/62.png', 'stimuli/alien_stimuli/63.png', 'stimuli/alien_stimuli/64.png', 'stimuli/alien_stimuli/65.png', 'stimuli/alien_stimuli/66.png', 'stimuli/instructions/break.png', 'stimuli/instructions/grid4.png', 'stimuli/instructions/grid2_old.png', 'stimuli/instructions/grid2_blue.png', 'stimuli/instructions/grid2.png', 'stimuli/instructions/earlystop_slide.png', 'stimuli/instructions/instr4slides_colorshape.pptx']
  Save hdf5 file = True
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = height
  Use version = 2022.2.5
  Window size (pixels) = [1920, 1200]
  color = $[0.5843, 0.5843, 0.5843]
  expName = HideSeek_v1
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine instr_1
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    CodeComponent loadSlides
      Code Type = Auto->JS
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      Begin Experiment:
        # initiate first slide
        slideStim= 'conditions/schedules/%s_first/%s_00/%s/instructions/Slide1.png' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner']) #"stimuli/instructions/Slide1.png"
        audioStim= 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio1.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner']) #"stimuli/instructions/Audio1.wav"

        startidx = 1
        loopidx  = 1

        # random number such that loop does not end before it should
        instrep  = 999


        # this need to match the slides you want to show at each turn
        endidx   = [12,14,16,20,21,22,25,26,27,32] # modify where to stop

        # last slide, then the loop terminates and the experiment starts
        maxSlide = 32

        # it is making as many turnovers as there are numbers in endidx -> this is baically how many times it goes back and forth between isntruction slides and the grid showing different examples
        beforeRep = len(endidx)
      Begin Routine:
        #audioStim.stop(reset=True) #False
        # load slides according to index
        slideStim = 'conditions/schedules/%s_first/%s_00/%s/instructions/Slide%d.png' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            startidx
        ) #"stimuli/instructions/Slide"+str(startidx)+".png"
        thisExp.addData('slideStim', slideStim)

        audioStim = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio%d.wav' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            startidx
        ) #"stimuli/instructions/Audio"+str(startidx)+".wav"
        thisExp.addData('audioStim', audioStim)

        # note, startidx is increased in 'nextButton' component; once button pressed, idx goes up by 1
      End Routine:
        # finish routine once hit slide number
        # startidx is increased with each button press

        if startidx > endidx[loopidx-1]:
            mini_instr_trials.finished = True
            loopidx+=1
            if startidx > maxSlide:
                beforeExpLoop.finished = True
    ImageComponent slides
      image [set every repeat] = $slideStim
      size = (4/3,3/4)
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.45, -0.45)
      saveStartStop = False
      size = (0.1, 0.02)
      startVal [time (s)] = 0
      text = next
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      callback:
        startidx += 1
        button_name = "next"
    PolygonComponent nextBox
      fillColor = white
      pos = (0.45, -0.45)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent nextText
      color = black
      letterHeight = 0.03
      pos = (0.45, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = →
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    ButtonComponent prev_but
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.45,-0.45)
      saveStartStop = False
      size = (0.1, 0.02)
      startVal [time (s)] = 0
      text = previous
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      callback:
        startidx -= 1
        button_name = "previous"
    PolygonComponent prev_box
      fillColor = white
      pos = (-0.45,-0.45)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent prev_text
      color = black
      letterHeight = 0.03
      pos = (-0.45,-0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ←
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    SoundComponent sounds
      sound [set every repeat] = $audioStim
      startVal [time (s)] = 0.0
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  Routine setEnv
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    CodeComponent initateExp
      Code Type = Py
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      Begin Experiment:
        # variables that can terminate the whole experiment if performance threshold is not reached
        # as shown here, they will not terminate the experiment
        repExp    = 1
        showearly = 0
        earlystop  = 0
        counter = 1
        import pandas as pd
        #instructions
        inputidx = 1
        fileidx = 1
        trainidx = 1
        instrFile_path = 'conditions/schedules/%s_first/%s_00/%s/inputInstr_1.xlsx' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        instrFile = pd.read_excel(instrFile_path)

        pracFile_path = 'conditions/schedules/%s_first/%s_00/%s/inputTrain_1.1.xlsx' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        pracFile   = pd.read_excel(pracFile_path)

        # main experiment
        condition_path = 'conditions/schedules/%s_first/%s_00/%s/inputTest.xlsx' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        conditions = pd.read_excel(condition_path)

        nrepExp = 1

        # number of choices that can be made
        # should basically be unlimited
        repChoice = 999

        # nr of repetition within each practice round
        # this is the number of reps for practice round
        maxRep      = 7 #earlier 3 -> now 5x6 = 24 new trials max
        maxPracRep = maxRep
        praclen    = 30 #this will change , just need to initialise it
        cumAcctrain = 0



        ## some design features:
        txtBoxSize  = (0.38, 0.3)
        txtBoxCoord = (-0.5,-0.2)

        msgSize  = 0.045
        msgCoord = (-0.5,-0.2)

        alienCoord = (-0.5, 0.2)
        alienSize  = (0.25, 0.3) #(0.3, 0.3)

        # _________________________________________________
        # grid information

        gridCoord = (0.24, 0)
        gridSize = (0.8,0.8)

        dotSize = (0.08, 0.08)

        # stepsize of the dot
        x_recsize = 0.8
        y_recsize = 0.8
        step  = x_recsize/10 # stepsize mid-2-mid between fields

        x_startPos = 0.3
        y_startPos = 0.3

        ## some good-to-know things:
        # x/y coordinate of lower right corner: (-0.16, -0.4)
        # x/y coordinate of upper right corner: (0.56,0.32)
        # always goes in steps of dotsize 0.08

        # formula:
        all_x = [-0.16, -0.08, 0, 0.08, 0.16, 0.24, 0.32, 0.4, 0.48, 0.56 ]
        all_y = [-0.4, -0.32, -0.24, -0.16, -0.08, 0, 0.08, 0.16, 0.24, 0.32]



        start_all_time =[]

        ## Define which condition to test
        #train_first = 'train_x'  # 'train_x' or 'train_y'
        #step_sequence = 'x_decreasing_steps'  # 'x_decreasing_steps' or 'x_increasing_steps'
        #start_point = 'bottom_left'  # 'bottom_left', 'bottom_right', 'top_left', or 'top_right'

        # Construct the relative path starting from the 'conditions' folder
      Begin Routine:
        start_all_time = globalClock.getTime()
        thisExp.addData('start_all_time', 'start_all_time')
    CodeComponent redirect_web
      Code Type = Auto->JS
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      Begin Experiment:
        urlredirect=0
      Begin Routine:
        # if you want to run it locally, need to define url with "testround"

        url="testround"
        #psychoJS.setRedirectUrls(url)
        thisExp.addData('url', url)
      Each Frame:
        # the url for completion of full experiment
        # however this is redefined depending on performance later on
        #urlredirect = "https://oxfordxpsy.az1.qualtrics.com/jfe/form/SV_bD7MzQZCI68RQTc"
  Routine endExp
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    CodeComponent bye_code
      Code Type = Auto->JS
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      Begin Experiment:
        total_time=[]
        end_all_time = []
        start_all_time = []
        #endlate = "stimuli/instructions/Audio_earlystop.wav"
      Begin Routine:
        #endlate.stop(reset=False)
        if showearly == 1:
            continueRoutine = False
            #endlate = "stimuli/instructions/Audio_earlystop.wav"
            #sound_1.isFinished = True
      End Routine:
        end_all_time = globalClock.getTime()

        total_time = end_all_time - start_all_time
        thisExp.addData('total_time',total_time)
        thisExp.addData('end_all_time', 'end_all_time')

        #import shutil
        #source_file = thisExp.dataFileName + '.csv'
        #target_path = 'Z:\private\children_task_data'
        #shutil.copy(source_file, target_path)
    ImageComponent bye
      image = stimuli/Slide33.png
      size = (4/3, 3/4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine GridFB
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    UnknownPluginComponent GridFB_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent gridCode_2
      Code Type = Auto->JS
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      Begin Experiment:
        # size of dots on grid
        dotSize = (0.07, 0.07)

        # initialise some positions
        # will be read in trough schedule
        startCol = (-0.1216, -0.6235, 0.2549)  # purple
        moveCol  = startCol



        # corner coordinates:
        x_end = 0.28
        y_end = 0.33

        # moving coordinates according to choice:
        # stimulus: movePos
        x_startPos = -0.28
        y_startPos = -0.33

        x_movePos = x_startPos
        y_movePos = y_startPos


        # stepsize of the dot
        step  = 0.08 # stepsize mid-2-mid between fields

        # down left:    (-0.28,-0.33)
        # up left:      (-0.28,0.33)
        # down right:   (0.28,-0.33)
        # up right:     (0.28,0.33)



        # some variables to check stuff:
        presskey = 0
        icount=1
        curlenkey = 0
        prevlenkey = 0
        choice = 0

        # alien image:


        alienidx = 1
        alienStim = "stimuli/alien_stimuli/image1.png"
      Begin Routine:
        choice_start = globalClock.getTime()
        #choiceT      = choice_start + 90000 # such that it does not continue before pressing
        choice_now   = 0
        counttime = 0
        counttime=0
        choice = 0
      Each Frame:
        # check decision, adjust movePos
        # left/right, change x-axis
        # up/down, change y-axis
        # adjust position of movePos stimulus:
        if icount>1:
            curlenkey = len(key_resp.keys)


        if curlenkey>prevlenkey or icount==1:
            presskey = 1
            icount +=1
            prevlenkey = len(key_resp.keys)

            if key_resp.keys == "left":
                x_movePos = x_movePos-step
                moveCol  = (1,1,1)  # white
            elif key_resp.keys == "right":
                x_movePos = x_movePos+step
                moveCol  = (1,1,1)  # white
            elif key_resp.keys == "up":
                y_movePos = y_movePos + step
                moveCol  = (1,1,1)  # white
            elif key_resp.keys == "down":
                 moveCol  = (1,1,1)  # white
                 y_movePos = y_movePos - step
            elif key_resp.keys == "space":
                 choice = 1
                 moveCol = (-1,-1,-1)
                 #choiceT = key_resp.rt()

            if prevlenkey == curlenkey:
                continueRoutine = False
                curlenkey = 0
                prevlenkey = 0



            choice_now = globalClock.getTime()
           #  thisExp.addData('choice_now', choice_now)
           #  thisExp.addData('choiceT', choiceT)
           #  thisExp.addData('choice_start',  choice_start)
           #  if choice_now - choice_start > choiceT + 1:
             #    continueRoutine = False
             #    moveLoop.finished = True
      End Routine:
        # stopping it according to time
        if choice==1:
            moveCol = (-1,-1,-1)
            counttime =  choice_now-choice_start
            while counttime < 2:
                choice_now = globalClock.getTime()
                counttime = choice_now -choice_start
            if counttime >2:
                moveLoop.finished=True
                #continueRoutine = True
    ImageComponent gridImage_2
      image = stimuli/instructions/grid2.png
      size = (4/3, 3/4)
      startVal [time (s)] = 0.0
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    ImageComponent alienImage_2
      image = $alienStim
      pos = (-0.5, 0.2)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent startPos_2
      fillColor = $startCol
      lineColor = $startCol
      pos = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent movePos_2
      fillColor [set every frame] = $moveCol
      lineColor [set every frame] = $moveCol
      pos [set every frame] = (x_movePos,y_movePos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right','up','down','space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = white
      shape = line
      size = (4, 4)
      startVal [time (s)] = 0.0
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  Routine fixation
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  Routine trainGrid
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    CodeComponent gridCode
      Code Type = Py
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      Begin Experiment:
        # _________________________________________________
        # input, ie csv file:

        #pracFile = 'conditions/schedules/%s_first/%s/%s/inputTrain_1.1.xlsx' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        if fileidx < 4:
            pracFile = 'conditions/schedules/%s_first/%s_00/%s/inputTrain_%d.%d.xlsx' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            fileidx,
            trainidx
            )

        # _________________________________________________
        # choices and accuracy
        choice  = 99
        corrAns = 0
        saveAcc = 0
        aCorr = 0
        #cumAcctrain = 0 # this variable is used to compare performance to determine whether people move on or repeat practice round
        # _________________________________________________
        # allowed keys:
        allowKeys = ('up','down','left','right','return')



        # moving coordinates according to choice:
        #x_startPos = 0.3
        #y_startPos = 0.3

        x_movePos = x_startPos
        y_movePos = y_startPos
        moveDur  = 9999

        # _________________________________________________
        # to compare number of steps in x/y direction with feedback

        y_dir = 0
        x_dir = 0

        # _________________________________________________
        # some variables to check stuff:
        presskey   = 0
        icount     = 1
        curlenkey  = 0
        prevlenkey = 0
        choice     = 0
        getPress     = []




        # _________________________________________________
        # alien image:
        alienStim = "stimuli/alien_stimuli/11.png"

        # alien's text box:
        #message = "Where am" '\n' "I hiding?"

        # _________________________________________________
        # colors:
        whiteCol = (1,1,1)
        blackCol = (-1,-1,-1)
        greenCol = (-1,0.38,-0.37)
        redCol   = (1 ,-1 ,-1)
        yellCol  = (1, 0.68, -1)
        msgCol   = blackCol
        #startCol = (-0.1216, -0.6235, 0.2549)  # purple
        startCol = blackCol
        moveCol  = startCol


        diff1=[]
        diff2=[]
        delta=[]
        alldiff=[]


        Choicebutton=[]
        RTchoice_train = []
      Begin Routine:
        start = globalClock.getTime()


        # _________________________________________________
        # reset these for each routine
        choice_start = globalClock.getTime()
        choice_now   = 0
        counttime    = 0
        moveDur      = 9999

        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"
      Each Frame:
        # check decision, adjust movePos
        # left/right, change x-axis
        # up/down, change y-axis
        # adjust position of movePos stimulus:

        if key_resp.keys:
            if key_resp.keys == "left":
                x_movePos = x_movePos-step
                moveCol  = (1,1,1)  # white
                x_dir -= 1 # compares the amount of button presses to the correct answer
            elif key_resp.keys == "right":
                x_movePos = x_movePos+step
                moveCol  = (1,1,1)  # white
                x_dir += 1
            elif key_resp.keys == "up":
                y_movePos = y_movePos + step
                moveCol  = (1,1,1)  # white
                y_dir += 1
            elif key_resp.keys == "down":
                moveCol  = (1,1,1)  # white
                y_movePos = y_movePos - step
                y_dir -= 1
            elif key_resp.keys == "return":
                choice = 1
                moveCol = (-1,-1,-1)
                thisExp.addData('wLy_dir', y_dir)
                thisExp.addData('wLx_dir', x_dir)
                choice_now = globalClock.getTime()
                thisExp.addData('x_movePos', x_movePos)
                thisExp.addData('y_movePos', y_movePos)
            if prevlenkey == curlenkey:
                continueRoutine = False
                curlenkey = 0
                prevlenkey = 0

            choice_now = globalClock.getTime()
            RTchoice_train = choice_now- start
            Choicebutton = key_resp.keys
            thisExp.addData('buttonPress_train',Choicebutton)
            thisExp.addData('RTchoice_train',RTchoice_train)
      End Routine:
        # _________________________________________________
        #  check choice accuracy:
        # _________________________________________________
        delta = 0.0001
        if choice == 1:

            diff1= abs(all_x[x_corrSteps] - x_movePos)
            diff2= abs(all_y[y_corrSteps] - y_movePos)

            alldiff = diff1+diff2

            if alldiff<=delta:
                corrAns = 1
                saveAcc +=1
                aCorr =0
                diff1=99
                diff2=99
                alldiff=99
                cumAcctrain = cumAcctrain + corrAns

            elif alldiff<=delta+0.1:
                corrAns =0
                saveAcc +=0
                aCorr =1 # almost correct condition
                diff1=99
                diff2=99
                alldiff=99
                cumAcctrain = cumAcctrain + corrAns

            elif alldiff>delta+0.1: #alldiff>delta:
                corrAns =0
                saveAcc +=0
                aCorr =0
                diff1=99
                diff2=99
                alldiff=99
                cumAcctrain = cumAcctrain + corrAns
            moveLoop_train.finished=True
            choice=0



        thisExp.addData('cumAcctrain', cumAcctrain)
        thisExp.addData('aCorr', aCorr)
        thisExp.addData('saveACC_choice', saveACC)
        thisExp.addData('corrAns', corrAns)
        thisExp.addData('x_movePos_end', x_movePos)
        thisExp.addData('y_movePos_end', y_movePos)
    ImageComponent gridImage_4
      image = stimuli/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPos
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent movePos
      fillColor [set every frame] = $moveCol
      lineColor [set every frame] = $moveCol
      pos [set every frame] = (x_movePos,y_movePos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'up','down','left','right','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent arena_rect
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (x_recsize,y_recsize)
      startVal [time (s)] = 0.0
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    ImageComponent alienImage
      image [set every repeat] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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  Routine setconfig
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    CodeComponent resetStuff
      Code Type = Py
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      Begin Experiment:
        nrepcount = 0
      Begin Routine:
        # _________________________________________________
        # update alien ID for next trial
        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"
        thisExp.addData('draw_alienStim', alienStim)
        thisExp.addData('draw_alienID', alienID)

        # _________________________________________________
        # starting position
        thisExp.addData('test_x', x_fixStart)

        x_startPos = all_x[x_fixStart]
        y_startPos = all_y[y_fixStart]

        x_movePos =x_startPos
        y_movePos =y_startPos
        moveCol   = startCol

        x_corrPos = 99
        y_corrPos = 99
        corrColFB = whiteCol

        # _________________________________________________
        # choice
        choice=0
        corrAns = 99

        keyFB_3.keys=[]
      Each Frame:
        nrepcount = nrepcount+1
        thisExp.addData('nrepcount', nrepcount)
      End Routine:
        counter +=1
  Routine GridFB_train
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    UnknownPluginComponent GridFB_train_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent gridCodeFB
      Code Type = Auto->JS
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      Begin Experiment:
        messageFB = "test"
        msgColFB  = whiteCol
        moveColFB = whiteCol
        x_corrPos = 99
        y_corrPos = 99
        corrColFB = whiteCol
        startCol = blackCol
        faceSize = (0.08, 0.08)
      Begin Routine:
        # _________________________________________________
        #  show feedback:
        # _________________________________________________
        FBstart = globalClock.getTime()
        thisExp.addData('corrAns', corrAns)


        # show the whole path
        # ---------------------------------


        # COMPARE ANSWER: steps into x/y direction
        # ---------------------------------
        if corrAns==1:
            messageFB = "CORRECT!"
            msgColFB  = greenCol
            moveColFB = greenCol
            corrColFB = greenCol
            x_corrPos = x_startPos+(x_corrSteps*step)
            y_corrPos = y_startPos+(y_corrSteps*step)


        elif corrAns ==0:
            messageFB = "INCORRECT!"
            msgColFB  = redCol
            moveColFB = redCol


         # show correct location:
            corrColFB = redCol
            thisExp.addData('bef_x_corrPos', x_corrPos)
            thisExp.addData('bef_y_corrPos', y_corrPos)


        # note this needs to be changed such that we do not mix the type of numbers
            x_corrPos = x_startPos+(x_corrSteps*step)
            y_corrPos = y_startPos+(y_corrSteps*step)

            thisExp.addData('aft_x_corrPos', x_corrPos)
            thisExp.addData('aft_y_corrPos', y_corrPos)
    ImageComponent gridImage_5
      image = stimuli/instructions/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    ImageComponent gridImageFB
      disabled = True
      image = stimuli/instructions/grid2.png
      size = (4/3, 3/4)
      startVal [time (s)] = 0.0
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    PolygonComponent alienTextBoxFB
      fillColor = white
      pos = txtBoxCoord
      shape = rectangle
      size = txtBoxSize
      startVal [time (s)] = 0.0
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    TextComponent alienMsgFB
      color [set every frame] = $msgColFB
      letterHeight = msgSize
      pos = msgCoord
      startVal [time (s)] = 0.0
      text [set every frame] = $messageFB
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    ImageComponent alienImageFB
      image [set every frame] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPosFB
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent movePosFB
      fillColor [set every frame] = $moveColFB
      lineColor [set every frame] = $moveColFB
      pos [set every frame] = (x_movePos,y_movePos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent corrPosFB
      disabled = True
      fillColor [set every frame] = $corrColFB
      lineColor [set every frame] = $corrColFB
      pos [set every frame] = (x_corrPos,y_corrPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent arena_rectFB
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (x_recsize,y_recsize)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyFB
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent alienFace_2
      disabled = True
      image [set every frame] = $alienStim
      pos [set every frame] = (x_corrPos,y_corrPos)
      size = faceSize
      startVal [time (s)] = 0.0
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  Routine PathFB_train
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    CodeComponent pathFB
      Code Type = Py
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      Begin Experiment:
        pickAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_corr.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])

        messageFB = "test"
        msgColFB  = whiteCol
        moveColFB = whiteCol
        x_corrPos = 99
        y_corrPos = 99
        corrColFB = whiteCol


        # coordinates into x-direction
        x_pathdirX = 99
        y_pathdirX= 99
        x_pathSize = 99

        # coordinates into y-direction
        x_pathdirY = 99
        y_pathdirY = 99
        y_pathSize = 99

        pathLW = 8
        faceSize = (0.08, 0.08)

        alienCoord_y=2
        alienCoord_x=2


        messageFB = "test"
        msgColFB  = whiteCol
        moveColFB = whiteCol
        x_corrPos = 99
        y_corrPos = 99
        corrColFB = whiteCol
        startCol = blackCol
        faceSize = (0.08, 0.08)



        RT_FBtrain=[]
      Begin Routine:
        # new message:
        msgColFB   = blackCol

        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"

        # _________________________________________________
        #  feedback
        # _________________________________________________

        start = globalClock.getTime()
        thisExp.addData('corrAns', corrAns)


        # show the whole path
        # ---------------------------------


        # COMPARE ANSWER: steps into x/y direction
        # ---------------------------------
        if corrAns==1:
            #messageFB = "CORRECT!" '\n' "Let me show" '\n' "you my route."
            pickAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_corr.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
            msgColFB  = greenCol
            moveColFB = greenCol
            corrColFB = greenCol

            x_corrPos = all_x[x_corrSteps]
            y_corrPos = all_y[y_corrSteps]


        elif corrAns ==0 and aCorr==0:
            #messageFB = "INCORRECT!" '\n' "Let me show" '\n' "you my route."
            pickAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_fals.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
            msgColFB  = redCol
            moveColFB = redCol

         # show correct location:
            corrColFB = redCol

            x_corrPos = all_x[x_corrSteps]
            y_corrPos = all_y[y_corrSteps]


        elif corrAns ==0 and aCorr==1:
            #messageFB = "INCORRECT!" '\n' "Let me show" '\n' "you my route."
            pickAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_acorr.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
            msgColFB  = yellCol
            moveColFB = yellCol

         # show correct location:
            corrColFB = yellCol

            x_corrPos = all_x[x_corrSteps]
            y_corrPos = all_y[y_corrSteps]

        thisExp.addData('aft_x_corrPos', x_corrPos)
        thisExp.addData('aft_y_corrPos', y_corrPos)



        # _________________________________________________
        #  show the whole path
        # _________________________________________________

        x_corrPos = all_x[x_corrSteps]
        y_corrPos = all_y[y_corrSteps]



        # path in x-direction:
        if x_corrSteps >= x_fixStart:
            x_pathdirX = (x_corrPos+x_startPos)/2
            y_pathdirX = y_startPos
            x_pathSize = abs(x_fixStart-x_corrSteps)*step

        elif x_corrSteps < x_fixStart:
            x_pathdirX = (x_corrPos+x_startPos)/2
            y_pathdirX = y_startPos
            x_pathSize = abs(x_fixStart-x_corrSteps)*step

        # path in y-direction:
        if  y_corrSteps >= y_fixStart:
            # path in y-direction:
            y_pathdirY = (y_corrPos+y_startPos)/2
            x_pathdirY = x_corrPos
            y_pathSize = abs(y_fixStart-y_corrSteps)*step

        elif  y_corrSteps < y_fixStart:
            # path in y-direction:
            y_pathdirY = (y_corrPos+y_startPos)/2
            #x_pathdirY = x_corrPos
            x_pathdirY = x_corrPos
            # adding one step in case it is zero steps
            y_pathSize = abs(y_fixStart-y_corrSteps)*step


        thisExp.addData('y_pathSize_check', y_pathSize)
        thisExp.addData('x_pathSize_check', x_pathSize)
        thisExp.addData('y_pathdirY', y_pathdirY)
        thisExp.addData('x_pathdirY', x_pathdirY)
        thisExp.addData('x_pathdirY', x_pathdirY)
        thisExp.addData('x_pathdirX', x_pathdirX)

        thisExp.addData('x_corrPos', x_corrPos)
        thisExp.addData('y_corrPos', y_corrPos)
      End Routine:
        FBstart = globalClock.getTime()

        RT_FBtrain = FBstart - start
        thisExp.addData('RT_FBtrain', RT_FBtrain)
    ImageComponent gridImage_6
      image = stimuli/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    ImageComponent gridImageFB_2
      disabled = True
      image = stimuli/grid2.png
      size = (4/3, 3/4)
      startVal [time (s)] = 0.0
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    ImageComponent alienImageFB_2
      image [set every repeat] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPosFB_2
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent movePosFB_2
      fillColor [set every frame] = $moveColFB
      lineColor [set every frame] = $moveColFB
      pos [set every frame] = (x_movePos,y_movePos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent corrPosFB_2
      disabled = True
      fillColor [set every frame] = $corrColFB
      lineColor [set every frame] = $corrColFB
      pos [set every frame] = (x_corrPos,y_corrPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent arena_rectFB_2
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (x_recsize,y_recsize)
      startVal [time (s)] = 0.0
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    KeyboardComponent keyFB_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent pathLine_xdir
      fillColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineWidth [set every frame] = pathLW
      pos [set every frame] = (x_pathdirX,y_pathdirX)
      shape = line
      size [set every repeat] = x_pathSize
      startVal [time (s)] = 0.0
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    PolygonComponent pathLine_ydir
      fillColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineWidth [set every frame] = pathLW
      ori = 90
      pos [set every frame] = (x_pathdirY,y_pathdirY)
      shape = line
      size [set every frame] = y_pathSize
      startVal [time (s)] = 0.0
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    ImageComponent alienFace
      image [set every repeat] = $alienStim
      pos [set every frame] = (x_corrPos,y_corrPos)
      size = faceSize
      startVal [time (s)] = 0.0
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    SoundComponent sounds_4
      sound [set every repeat] = $pickAudio
      startVal [time (s)] = 0.0
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  Routine testGrid
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    CodeComponent gridCode_test
      Code Type = Auto->JS
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      Begin Experiment:
        # _________________________________________________
        # input, ie csv file:
        #trainRep = len(trialTrain)
        iexp = 1

        # _________________________________________________
        # choices and accuracy
        choice  = 99
        corrAns = 99
        cumAcctest = 0
        # _________________________________________________
        # initialise some positions
        # size of dots on grid
        #dotSize = (0.08, 0.08)
        #step  = 0.08 # same as dotsize
        #gridSize = (0.8,0.8)

        # stepsize of the dot
        #x_recsize = 0.8
        #y_recsize = 0.8



        # moving coordinates according to choice:
        #x_startPos = 0.3
        #y_startPos = 0.3

        moveDur  = 9999

        # _________________________________________________
        # to compare number of steps in x/y direction with feedback

        y_dir = 0
        x_dir = 0

        # _________________________________________________
        # some variables to check stuff:
        presskey   = 0
        icount     = 1
        curlenkey  = 0
        prevlenkey = 0
        choice     = 0


        # _________________________________________________
        # alien image:
        alienStim = "stimuli/alien_stimuli/11.png"

        # alien's text box:
        #message = "Where am" '\n' "I hiding?"

        # _________________________________________________
        # colors:
        whiteCol = (1,1,1)
        blackCol = (-1,-1,-1)
        greenCol = (-1,0.38,-0.37)
        redCol   = (1 ,-1 ,-1)
        msgCol   = blackCol
        #startCol = (-0.1216, -0.6235, 0.2549)  # purple
        startCol = blackCol
        moveCol  = startCol





        choice_test=[]
        RTchoice_test = []
      Begin Routine:
        start = globalClock.getTime()



        # _________________________________________________
        # reset these for each routine
        choice_now   = 0
        counttime    = 0
        moveDur      = 9999
        # alien image:
        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"
      Each Frame:
        # check decision, adjust movePos
        # left/right, change x-axis
        # up/down, change y-axis
        # adjust position of movePos stimulus:
        if key_resp_test.keys:
                # MOVE DOT ACCORDING TO BUTTON KEYS:
                # ---------------------------------
                if key_resp_test.keys == "left":
                    x_movePos = x_movePos-step
                    moveCol  = (1,1,1)  # white
                    x_dir -= 1 # compares the amount of button presses to the correct answer
                elif key_resp_test.keys == "right":
                    x_movePos = x_movePos+step
                    moveCol  = (1,1,1)  # white
                    x_dir += 1
                elif key_resp_test.keys == "up":
                    y_movePos = y_movePos + step
                    moveCol  = (1,1,1)  # white
                    y_dir += 1
                elif key_resp_test.keys == "down":
                     moveCol  = (1,1,1)  # white
                     y_movePos = y_movePos - step
                     y_dir -= 1

                # button keys to indicate choice:
                elif key_resp_test.keys == "return":
                     choice = 1
                     moveCol = (-1,-1,-1)
                     #choiceT = key_resp.rt()

                if prevlenkey == curlenkey:
                    continueRoutine = False
                    curlenkey = 0
                    prevlenkey = 0


                thisExp.addData('wLy_dir_test', y_dir)
                thisExp.addData('wLx_dir_test', x_dir)


                choice_now = globalClock.getTime()
                RTchoice_test = choice_now- start
                Choicebutton =key_resp_test.keys
                thisExp.addData('buttonPress_test',Choicebutton)
                thisExp.addData('RTchoice_test',RTchoice_test)
      End Routine:

        # _________________________________________________
        #  check choice accuracy:
        # _________________________________________________

        if choice == 1:
            if round(all_x[x_corrSteps],3) == round(x_movePos,3) and round(all_y[y_corrSteps],3) == round(y_movePos,3):
                corrAns = 1
                saveAcc +=1
                cumAcctest = cumAcctest+corrAns


            else:
                corrAns =0
                saveAcc +=0
                cumAcctest = cumAcctest+corrAns
            moveLoop_test.finished=True
            choice=0

        thisExp.addData('cumAcctest', cumAcctest)
        thisExp.addData('saveACC_choice', saveACC)
        thisExp.addData('corrAns_test', corrAns)
        thisExp.addData('x_movePos_end', x_movePos)
        thisExp.addData('y_movePos_end', y_movePos)
    ImageComponent gridImage_3
      image = stimuli/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    ImageComponent alienImage_test
      image [set every repeat] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPos_test
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    PolygonComponent movePos_test
      fillColor [set every frame] = $moveCol
      lineColor [set every frame] = $moveCol
      pos [set every frame] = (x_movePos,y_movePos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_test
      allowedKeys [set every repeat] = 'up','down','left','right','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    PolygonComponent arena_rect_test
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      pos = (0.3, 0)
      shape = rectangle
      size = (x_recsize,y_recsize)
      startVal [time (s)] = 0.0
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  Routine instrGrid
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    CodeComponent gridCode_instr
      Code Type = Auto->JS
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      Begin Experiment:
        # _________________________________________________
        # input, ie csv file:
        #trainRep = len(trialTrain)
        if fileidx < 4:
            instrFile = 'conditions/schedules/%s_first/%s_00/%s/inputInstr_%d.xlsx' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            fileidx
            )

        # _________________________________________________
        # input, ie csv file:
        #trainRep = len(trialTrain)
        iexp = 1

        # _________________________________________________
        # choices and accuracy
        choice  = 99
        corrAns = 99

        # _________________________________________________
        # initialise some positions
        # size of dots on grid
        #dotSize = (0.08, 0.08)
        #step  = 0.08 # same as dotsize

        # stepsize of the dot
        #x_recsize = 0.8
        #y_recsize = 0.8



        # moving coordinates according to choice:
        # temporary pos, off the screen
        #x_startPos = 0.3
        #y_startPos = 0.3


        moveDur  = 9999

        # _________________________________________________
        # to compare number of steps in x/y direction with feedback

        y_dir = 0
        x_dir = 0

        # _________________________________________________
        # some variables to check stuff:
        presskey   = 0
        icount     = 1
        curlenkey  = 0
        prevlenkey = 0
        choice     = 0


        # _________________________________________________
        # alien image:
        alienStim = "stimuli/alien_stimuli/11.png"

        # alien's text box:
        Audio_intr = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_intr1.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        #messageInstr = "This is my" '\n' "starting position" '\n' "Press spacebar to" '\n' "see where I hide."

        # _________________________________________________
        # colors:
        whiteCol = (1,1,1)
        blackCol = (-1,-1,-1)
        greenCol = (-1,0.38,-0.37)
        redCol   = (1 ,-1 ,-1)
        yellCol  = (1, 0.68, -1)
        purpleCol = (0.2549, -0.7490, 0.8824)
        msgCol   = blackCol
        #startCol = (-0.1216, -0.6235, 0.2549)  # purple
        startCol = blackCol
        moveCol  = startCol
      Begin Routine:
        # _________________________________________________
        # reset these for each routine
        choice_start = globalClock.getTime()
        # alien image:


        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"
        Audio_intr = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_intr1.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])


        thisExp.addData('instrFile', instrFile)
        thisExp.addData('alienStim_instr', alienStim)
    ImageComponent gridImage_instr
      image = stimuli/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPos_3
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    KeyboardComponent key_instr
      allowedKeys [set every repeat] = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent alienImage_3
      image [set every repeat] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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    SoundComponent sounds_1
      sound [set every repeat] = $Audio_intr
      startVal [time (s)] = 0.0
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  Routine PathFB_instr
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    CodeComponent pathFB_2
      Code Type = Auto->JS
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      Begin Experiment:
        # new message:
        intrAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_intr2.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])

        #messageFBinstr = "This is where I hide." '\n' "Let me show" '\n' "you my route."
        #msgColFB   = blackCol

        # coordinates into x-direction
        x_pathdirX = 99
        y_pathdirX = 99
        x_pathSize = 99

        # coordinates into y-direction
        x_pathdirY = 99
        y_pathdirY = 99
        y_pathSize = 99

        x_corrPos = 99
        y_corrPos=99

        pathLW = 8
        faceSize = (0.08, 0.08)

        start = []
        now = []
        RTFB_instr=[]
      Begin Routine:
        # timings
        start = globalClock.getTime()
        # _________________________________________________



        #messageFBinstr = "This is where I hide." '\n' "Let me show" '\n' "you my route."
        #msgColFB   = blackCol
        intrAudio = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_intr2.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])


        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"

        # _________________________________________________
        #  show the whole path
        # _________________________________________________

        x_corrPos = all_x[x_corrSteps]
        y_corrPos = all_y[y_corrSteps]

        # path in x-direction:
        if x_corrSteps >= x_fixStart:
            x_pathdirX = (x_corrPos+x_startPos)/2
            y_pathdirX = y_startPos
            x_pathSize = abs(x_fixStart-x_corrSteps)*step

        elif x_corrSteps < x_fixStart:
            x_pathdirX = (x_corrPos+x_startPos)/2
            y_pathdirX = y_startPos
            x_pathSize = abs(x_fixStart-x_corrSteps)*step

        # path in y-direction:
        if  y_corrSteps >= y_fixStart:
            # path in y-direction:
            y_pathdirY = (y_corrPos+y_startPos)/2
            x_pathdirY = x_corrPos
            y_pathSize = abs(y_fixStart-y_corrSteps)*step

        elif  y_corrSteps < y_fixStart:
            # path in y-direction:
            y_pathdirY = (y_corrPos+y_startPos)/2
            x_pathdirY = x_corrPos
            # adding one step in case it is zero steps
            y_pathSize = abs(y_fixStart-y_corrSteps)*step




        thisExp.addData('all_x', all_x)
        thisExp.addData('all_y', all_y)

        thisExp.addData('FBy_corrSteps', y_corrSteps)
        thisExp.addData('FBy_fixStart', y_fixStart)

        thisExp.addData('FBx_corrSteps', x_corrSteps)
        thisExp.addData('FBx_fixStart', x_fixStart)

        thisExp.addData('FBy_pathSize_check', y_pathSize)
        thisExp.addData('FBx_pathSize_check', x_pathSize)
      End Routine:
        # still within the loop
        if getRow < nrtrain-1:
             getRow = getRow+1
        elif getRow >= nrtrain-1:
         # reset for the next
             getRow = 0
        strRow = str(getRow)


        # _________________________________________________
        now = globalClock.getTime()
        # _________________________________________________

        RTFB_instr = now - start
        thisExp.addData('RTFB_instr', RTFB_instr)
    ImageComponent gridImage_9
      image = stimuli/grid2.png
      pos = gridCoord
      size = gridSize
      startVal [time (s)] = 0.0
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    ImageComponent alienImageFB_3
      image [set every repeat] = $alienStim
      pos = alienCoord
      size = alienSize
      startVal [time (s)] = 0.0
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    PolygonComponent startPosFB_3
      fillColor = $startCol
      lineColor = $startCol
      pos [set every repeat] = (x_startPos,y_startPos)
      shape = circle
      size = dotSize
      startVal [time (s)] = 0.0
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    KeyboardComponent keyFB_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent pathLine_ydir_2
      fillColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineWidth [set every frame] = 8
      ori = 90
      pos [set every frame] = (x_pathdirY,y_pathdirY)
      shape = line
      size [set every frame] = y_pathSize
      startVal [time (s)] = 0.0
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    PolygonComponent pathLine_xdir_2
      fillColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineColor [set every frame] = 1.0000, 0.6863, -1.0000
      lineWidth [set every frame] = 8
      pos [set every frame] = (x_pathdirX,y_pathdirX)
      shape = line
      size [set every frame] = x_pathSize
      startVal [time (s)] = 0.0
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    ImageComponent alienFace_3
      image [set every repeat] = $alienStim
      pos [set every frame] = (x_corrPos,y_corrPos)
      size = faceSize
      startVal [time (s)] = 0.0
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    SoundComponent sounds_2
      sound = $intrAudio
      startVal [time (s)] = 0.0
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  Routine instrFile
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    UnknownPluginComponent instrFile_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # to adjust the file name to show examples during the instruction phase
        # not yet clear whether 1 file or multiple, need to potentially redo some of the examples/ isntr phases if not reach criterion
  Routine skipRoutine
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    CodeComponent checkSkip
      Code Type = Auto->JS
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      Begin Experiment:
        # this is a crucial part for organising the experiment's components
        # it determines which components will be skipped
        # you don't want to show the same order of components all the time, eg
        # some trials should be instruction slide -> Grid -> instruction slide
        # other trials should be instruction slide -> Grid -> practice -> slide

        # the difference between the examples is that you skip practice trials in one of them,
        # we need to somehow flexibly integrate this such that we do not have to hard code
        # every needed combination of components

        # the vector has always be as long as the slide entries (check instr_1)

        #### TRAINING
        # 1: show it, 0: do not show it
        showTrain        = [0,0,0,1,0,0,1,0,0,1,0]
        #showTrain        = [0,0,0,0,0,0,0,0,0,0,0]

        #### GRID EXAMPLE
        # 1: show it, 0: do not show it
        showGexam       = [1,1,1,0,1,1,0,1,1,0,0]
        #showGexam       = [0,0,0,0,0,0,0,0,0,0,0]
  Routine getSkip
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        instrSkipRep = 1
        trainRep     = 1
      Begin Routine:
        # checks which routines/components should be skipped

        # grid examples:
        if showGexam[loopidx-1] == 1:
           instrSkipRep = 1
        else:
            instrSkipRep = 0

        # practice rounds:
        if showTrain[loopidx-1] == 1:
             trainRep = 1

        else:
            trainRep = 0
  Routine pause
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    UnknownPluginComponent pause_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent showPause
      Code Type = Auto->JS
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      Begin Experiment:
        minutes = 0
        seconds = 0
        time_left = 0
        pause_timer = 0

        # pause in seconds:
        pauseSec = 120


        nrepPause = pauseSec*2
        GlobalClock=[]
        timer=[]
        duration=[]
        timing=[]
      Begin Routine:
        if showearly == 1:
            continueRoutine = False

        else:
            GlobalClock =  util.Clock()
            timer = GlobalClock.getTime()
            duration = 60
      Each Frame:
        time_left = timer.getTime()

        minutes = int(time_left/60)
        seconds = int(time_left - minutes * 60)

        timing = (minutes, seconds)


        if timer.getTime() >= duration:
            pauseLoop.finished = True
            continueRoutine = False



        #if time_left <= 0.0:
         #   pauseLoop.finished = True
         #   continueRoutine = False
    ImageComponent breakSlide
      image = stimuli/instructions/break.png
      size = (4/3,3/4)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = $(-1.0000, -1.0000, 0.0039)
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $timing
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    KeyboardComponent key_continue
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine checkPerf
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        #pracFile   = 'conditions/schedules/%s_first/%s/%s/inputTrain_1.1.xlsx' % (expInfo['train_first'], expInfo['direction of x'], expInfo['starting corner'])

        # variable to check performance threshold
        saveACC   = 0
        fileidx   = 1
        trainidx = 1
        addNrep   = 1
        nextPrac  = 99
        earlierperf = 0

        #  performance threshold: 70% -> trial number = 30
        #  30 (praclen) * 0.7 = 21, round down = 17 -> need to have 21 correct to move forward
        percthres = 0.7
        perfthres = 21
        # as a reminder, this is the variable to compare the current accuracy to the performance threshold: compareACC
      Begin JS Experiment:
        pracFile = "conditions/inputTrain_1.xlsx";
        saveACC = 0;
        fileidx = 1;
        addNrep = 1;
        nextPrac = 99;
        percthres = 0.7;
        perfthres = 17;
      Begin JS Routine:
        if ((nrepcount > (praclen - 1))) {
            psychoJS.experiment.addData("saveACC_pre", saveACC);
            saveACC = 25;
            psychoJS.experiment.addData("within_saveACC_train", saveACC);
            if ((cumAcctrain >= perfthres)) {
                nextPrac = 1;
            } else {
                if ((cumAcctrain < perfthres)) {
                    nextPrac = 0;
                }
            }
            if ((fileidx < 3)) {
                earlystop += 1;
                psychoJS.experiment.addData("earlystop_wloop", earlystop);
            }
            cumAcctrain = 0;
        }
        psychoJS.experiment.addData("cumAcctrain_check", cumAcctrain);
        psychoJS.experiment.addData("perfthres", perfthres);
        psychoJS.experiment.addData("percthres", percthres);
        psychoJS.experiment.addData("earlystop", earlystop);
        psychoJS.experiment.addData("nextPrac", nextPrac);
        psychoJS.experiment.addData("fileidx", fileidx);
        psychoJS.experiment.addData("praclen", praclen);
        psychoJS.experiment.addData("saveACC_train", saveACC);
      Begin Routine:
        # checks performance on practice trials and
        # repeats practice rounds if necessary

        # note,order of presenting stimuli random,
        # even if they repeat the practice
        # the stim order will not be the same as before

        # only check when all trials are done within the round
        if nrepcount > praclen-1: #test amount(start from 0) > len(24-1)
            thisExp.addData('saveACC_pre', saveACC)
            # ACC = (cumAcctrain/(24/100)/100) + (earlierperf*(4/24))
            # ACC = (cumAcctrain/(30/100)/100) + (earlierperf*(5/30))
            ACC = 0.9
            thisExp.addData('ACC', ACC)
            #saveACC= 25
            # for debugging, when want to have accuracy to continue
           # set this to 25 if you just 'pretend' all choices were made correctly


             # check performance threshold:
             #  is this performance threshold too high? YES
            thisExp.addData('within_saveACC_train', saveACC)
            #if saveACC >= praclen-1:
             #       nextPrac = 1
            #elif saveACC < praclen-1:
             #   nextPrac = 0
            #if fileidx < 3: # only for the dim 1 training sessions
            #    earlystop +=1
            #    thisExp.addData('earlystop_wloop', earlystop)

            if ACC >= percthres:
               nextPrac = 1
            elif ACC < percthres:
                 nextPrac = 0
            if fileidx < 3:# only for the dim 1 training sessions
               earlystop +=1
               thisExp.addData('earlystop_wloop', earlystop)

        #    if cumAcctrain >= perfthres:
        #            nextPrac = 1
        #    elif cumAcctrain < perfthres:
        #        nextPrac = 0
        #    if fileidx < 7:#3: # only for the dim 1 training sessions
        #        earlystop +=1
        #        thisExp.addData('earlystop_wloop', earlystop)
           # reset test variable
            earlierperf = earlierperf + (cumAcctrain/(24/100)/100)
            # earlierperf = earlierperf + (cumAcctrain/(30/100)/100)
            thisExp.addData('cumAcctrain_check', cumAcctrain)
            cumAcctrain =0

        thisExp.addData('perfthres', perfthres)
        thisExp.addData('percthres', percthres)
        thisExp.addData('earlierperf', earlierperf)

        thisExp.addData('earlystop', earlystop)
        thisExp.addData('nextPrac', nextPrac)
        thisExp.addData('fileidx', fileidx)
        thisExp.addData('praclen', praclen)
        thisExp.addData('saveACC_train', saveACC)
      End JS Routine:
        if ((nextPrac === 1)) {
            repeat_prac.finished = true;
            saveACC = 0;
            nextPrac = 99;
            nrepcount = 0;
            fileidx = (fileidx + 1);
        } else {
            if ((nextPrac === 0)) {
                saveACC = 0;
                nextPrac = 99;
                nrepcount = 0;
            }
        }
        if ((fileidx < 4)) {
            pracFile = (("conditions/inputTrain_" + fileidx.toString()) + ".xlsx");
            instrFile = (("conditions/inputInstr_" + fileidx.toString()) + ".xlsx");
        }
        psychoJS.experiment.addData("pracFile", pracFile);
        psychoJS.experiment.addData("nextPrac_train", nextPrac);
        psychoJS.experiment.addData("addNrep", addNrep);
        psychoJS.experiment.addData("fileidx_endr", fileidx);
        if ((earlystop >= maxPracRep)) {
            showearly = 1;
            continueRoutine = false;
            maxRep = 0;
            trainRep = 0;
            beforeRep = 0;
            instrSkipRep = 0;
            instrep = 0;
            nrepExp = 0;
            repChoice = 0;
            nrepPause = 0;
            beforeExpLoop.finished = true;
            repeat_prac.finished = true;
            trainLoop.finished = true;
            moveLoop_train.finished = true;
            instrLoop.finished = true;
            mini_instr_trials.finished = true;
        }
        psychoJS.experiment.addData("repExp", repExp);
        psychoJS.experiment.addData("showearly", showearly);
      End Routine:
        # update files to read in if performance threshold is exceeded
        if nextPrac ==1: # stops practice phase
            repeat_prac.finished = True
            # reset
            saveACC   = 0
            nextPrac  = 99
            nrepcount = 0
            fileidx += 1
            trainidx = 1
        elif nextPrac ==0: # repeats practice phase
            # reset
            saveACC   = 0
            nextPrac  = 99
            nrepcount = 0
            trainidx += 1

        # only read in files for practice
        if fileidx < 4:
        ## prep files:
            #pracFile   = "conditions/inputTrain_"+str(fileidx)+ "." +str(trainidx)+".xlsx"
            pracFile = 'conditions/schedules/%s_first/%s_00/%s/inputTrain_%d.%d.xlsx' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            fileidx,
            trainidx
        )
            instrFile = 'conditions/schedules/%s_first/%s_00/%s/inputInstr_%d.xlsx' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            fileidx
        )


        ## save data:
        thisExp.addData('pracFile', pracFile)
        thisExp.addData('nextPrac_train', nextPrac)
        thisExp.addData('addNrep', addNrep)
        thisExp.addData('fileidx_endr', fileidx)


        #### quit experiment when not reaching performannce threshold in time

        if earlystop >= maxPracRep:
            # set outer loop to 0 -> terminates everything
            showearly = 1
            continueRoutine = False
            # set all resps to 0
            maxRep = 0
            trainRep=0
            beforeRep = 0
            instrSkipRep=0
            instrep = 0
            nrepExp = 0
            repChoice = 0
            nrepPause = 0

            beforeExpLoop.finished= True
            repeat_prac.finished = True
            trainLoop.finished = True
            moveLoop_train.finished = True
            instrLoop.finished = True
            mini_instr_trials.finished = True


        thisExp.addData('repExp', repExp)
        thisExp.addData('showearly', showearly)
  Routine earlyStop
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        endstatus = " "
        endearly = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_earlystop.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
      Begin Routine:
        #endearly.stop(reset=False)
        if showearly == 0: # finish to the end
            continueRoutine = False
            #url = "https://mpib.qualtrics.com/jfe/form/SV_5BmsK5GOa7G6BYq?participant="+expInfo['participant']
            #psychoJS.setRedirectUrls(url)
        elif showearly ==1:
            endearly = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio_earlystop.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
            #urlredirect = ""
            endstatus = "experiment_finished_early"
            thisExp.addData('endstatus', endstatus)
            thisExp.addData('url_stopearly', urlredirect)
            #url ="https://mpib.qualtrics.com/jfe/form/SV_6LJSuyOrMfljMG2?participant="+expInfo['participant']
            #psychoJS.setRedirectUrls(url)
      End Routine:
        end_all_time = globalClock.getTime()

        total_time = end_all_time - start_all_time
        thisExp.addData('total_time',total_time)
        thisExp.addData('end_all_time', 'end_all_time')
    ImageComponent slide_stop
      image [set every repeat] = stimuli/Slide31.png
      size = (4/3,3/4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_stop
      sound [set every repeat] = $endearly
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine loadparams
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    CodeComponent code_6
      Code Type = Py
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      Begin Experiment:
        alienStim = "stimuli/alien_stimuli/11.png"

        # to select the right rows
        #nrtrain = 2 # how many total examples for each dimension
        getRow = 0
        strRow = str(getRow)
        trialLength = 2
        trialInstr=1

        # define variables for online use


        x_startPos=0
        y_startPos=0

        x_movePos = 0
        y_movePos = 0

        alienCoord_x=0
        alienCoord_y =0

        nrtrain = 0

        nrepcount = 0

        alienCoord_x=2
        alienCoord_y=2


        # formula:
        all_x = [-0.16, -0.08, 0, 0.08, 0.16, 0.24, 0.32, 0.4, 0.48, 0.56 ]
        all_y = [-0.4, -0.32, -0.24, -0.16, -0.08, 0, 0.08, 0.16, 0.24, 0.32]
      Begin Routine:
        # load some params such that they can be shown in first trial
        # psychopy has some problems loading otherwise

        alienStim = "stimuli/alien_stimuli/"+str(alienID)+".png"
        thisExp.addData('alienStim', alienStim)


        nrtrain = trialLength

        # currently the input starts at 1, in python numbers start at 0

        x_startPos = all_x[x_fixStart]
        y_startPos = all_y[y_fixStart]

        x_movePos = x_startPos
        y_movePos = y_startPos
  Routine quickfixation
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine update_Files
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    UnknownPluginComponent update_Files_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        # this component will only be passed once the practice and training rounds are done,
        # then it counts one up and thereby reads in the new files
        fileCount = 1

        trainFile = "conditions/inputTrain_1.xlsx"
        instrFile = "conditions/inputInstr_1.xlsx"
      Begin Routine:
        fileCount +=1
        trainFile = "conditions/inputTrain_"+str(fileCount)+".xlsx"
        instrFile = "conditions/inputInstr_"+str(fileCount)+".xlsx"
      End Routine:
        thisExp.addData('fileCount', fileCount)
        thisExp.addData('trainFile', trainFile)
        thisExp.addData('instrFile', instrFile)
  Routine startExp
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    UnknownPluginComponent startExp_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        # checks whether should start the test session
        # this is dependent on whether participants have managed the practice session

        # if showearly == 1: # finish early
          #   moveLoop_test.finished = True
           #  experiment.finished = True
  Routine test
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    UnknownPluginComponent test_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent image
      image = stimuli/alien_stimuli/13.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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  Routine testThis
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    UnknownPluginComponent testThis_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        getImage = "stimuli/alien_stimuli/11.png"
      Begin Routine:
        getImage = "stimuli/alien_stimuli/"+str(newimageID)+".png"
      Each Frame:
        thisExp.addData('cur_imageID', newimageID)



        thisExp.addData('getImage_draw', getImage)
    ImageComponent image_2
      image [set every repeat] = $getImage
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine consent
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    UnknownPluginComponent consent_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    CodeComponent consent_code_3
      Code Type = Auto->JS
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      Begin Experiment:
        consent_inx = 0
      Begin Routine:
        start = globalClock.getTime()
        consent_inx += 1
      End Routine:
        now = globalClock.getTime()
        RT = now - start
        thisExp.addData('type', 'consent')
        thisExp.addData('index', consent_inx)
        thisExp.addData('RTconsent', RT)
    ImageComponent consent_imgae
      image [set every repeat] = $consent_stimulus
      saveStartStop = False
      size = (4/3, 3/4)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine start
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    UnknownPluginComponent start_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent blank_text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        start_all_time = globalClock.getTime()
  Routine end
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    UnknownPluginComponent end_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent end_text
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you!
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        end_all_time = globalClock.getTime()

        total_time = end_all_time - start_all_time
        thisExp.addData('total_time',total_time)
  Routine nextLevel
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    UnknownPluginComponent nextLevel_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    ImageComponent level4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # initiate first slide
        slideStim2='conditions/schedules/%s_first/%s_00/%s/instructions/Slide32.png' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])
        audioStim3='conditions/schedules/%s_first/%s_00/%s/instructions/Audio32.wav' % (expInfo['train_first'], expInfo['00_coordinate'], expInfo['starting corner'])


        startidx2 = 33
        loopidx2  = 1

        # random number such that loop does not end before it should
        instrep2  = 999


        # this need to match the slides you want to show at each turn
        #endidx2   = [33] # modify where to stop

        # last slide, then the loop terminates and the experiment starts
        maxSlide2 = 34

        # it is making as many turnovers as there are numbers in endidx -> this is baically how many times it goes back and forth between isntruction slides and the grid showing different examples
        beforeRep = len(endidx)


        total_time=[]
        end_all_time = []
        start_all_time = []
      Begin Routine:
        #audioStim3.stop(reset=False)
        if showearly == 1:
            continueRoutine = False

        # load slides according to index
        slideStim2 = slideStim = 'conditions/schedules/%s_first/%s_00/%s/instructions/Slide%d.png' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            startidx2
        )
        thisExp.addData('slideStim', slideStim)

        audioStim3 = slideStim = 'conditions/schedules/%s_first/%s_00/%s/instructions/Audio%d.wav' % (
            expInfo['train_first'],
            expInfo['00_coordinate'],
            expInfo['starting corner'],
            startidx2
        )
        thisExp.addData('audioStim', audioStim)

        # note, startidx is increased in 'nextButton' component; once button pressed, idx goes up by 1
      End Routine:
        # finish routine once hit slide number
        # startidx is increased with each button press

        if startidx2 > maxSlide2:
            mini_instr2_trials.finished = True
            loopidx2+=1
    ImageComponent slides_2
      image [set every repeat] = $slideStim2
      size = (4/3,3/4)
      startVal [time (s)] = 0.0
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    ButtonComponent nextButton_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.45, -0.45)
      saveStartStop = False
      size = (0.1, 0.02)
      startVal [time (s)] = 0
      text = next
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      callback:
        startidx2 += 1
        button_name = "next"
    PolygonComponent nextBox_2
      fillColor = white
      pos = (0.45, -0.45)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent nextText_2
      color = black
      letterHeight = 0.03
      pos = (0.45, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = →
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    ButtonComponent prev_but_2
      anchor = bottom-center
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.45,-0.45)
      saveStartStop = False
      size = (0.1, 0.02)
      startVal [time (s)] = 0
      text = previous
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      callback:
        if startidx2 > 1:
            startidx2 -= 1
        button_name = "previous"
    PolygonComponent prev_box_2
      fillColor = white
      pos = (-0.45,-0.45)
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent prev_text_2
      color = black
      letterHeight = 0.03
      pos = (-0.45,-0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ←
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    SoundComponent sounds_3
      sound [set every repeat] = $audioStim3
      startVal [time (s)] = 0.0
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  Routine break_2
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        break_slide = 'stimuli/break.png'
      Begin Routine:
        current_trial = trialTrain
        break_list = [18, 36, 54]
        if current_trial in break_list:
            thisExp.next = 'break2'
            break_slide = 'stimuli/break.png'
            event.waitKeys(keyList=['space'])
        else:
            thisExp.next = 'setconfig'
    ImageComponent image_break
      image = $break_slide
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_3
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Experiment:
        break_screen = 'stimuli/break.png'
        #fix_time = randint(1,2)
      Begin Routine:
        if nrepcount == 5:
            break_screen = 'stimuli/break.png'
            event.waitKeys(keyList=['space'])
      Each Frame:
        if not nrepcount == 36 and t >= 1.0:
            continueRoutine = False
    ImageComponent image_3
      image = $break_screen
      size = (0.5, 0.5)
      startVal [condition] = nrepcount == 36
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    TextComponent fixation_text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine break_4
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        break_slide = 'stimuli/break.png'
        fix_time = 1
      Begin Routine:
        if nrepcount == 5:
            break_slide = 'stimuli/break.png'
            event.waitKeys(keyList=['space'])
        else:
            fix_time = 1
      Each Frame:
        if nrepcount != 5 and t >= 1.0:
            continueRoutine = False
    TextComponent fixation_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_time
      text = +
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    ImageComponent image_break1
      image = $break_slide
      size = (0.5, 0.5)
      startVal [condition] = nrepcount==5
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [condition] = nrepcount==5
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  Routine fixation_2
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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Flow
  Routine setEnv
  Routine skipRoutine
  LoopInitiator beforeExpLoop loopType="TrialHandler"
    loopType = sequential
    nReps = beforeRep
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    LoopInitiator mini_instr_trials loopType="TrialHandler"
      loopType = sequential
      nReps = instrep
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      Routine instr_1
    LoopTerminator mini_instr_trials
    Routine getSkip
    LoopInitiator instrLoop loopType="TrialHandler"
      Selected rows = $strRow
      conditionsFile = $instrFile
      loopType = sequential
      nReps = instrSkipRep
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      Routine loadparams
      Routine instrGrid
      Routine PathFB_instr
      Routine setconfig
    LoopTerminator instrLoop
    LoopInitiator repeat_prac loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = maxRep
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      LoopInitiator trainLoop loopType="TrialHandler"
        conditionsFile = $pracFile
        isTrials = False
        loopType = sequential
        nReps = trainRep
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        Routine loadparams
        LoopInitiator moveLoop_train loopType="TrialHandler"
          loopType = random
          nReps = repChoice
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          Routine trainGrid
        LoopTerminator moveLoop_train
        Routine quickfixation
        Routine PathFB_train
        Routine quickfixation
        Routine setconfig
      LoopTerminator trainLoop
      Routine checkPerf
    LoopTerminator repeat_prac
  LoopTerminator beforeExpLoop
  LoopInitiator experiment loopType="TrialHandler"
    conditionsFile = $condition_path
    loopType = sequential
    nReps = nrepExp
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    conditions:
      [{'trialTrain': 1, 'x_fixStart': 3, 'y_fixStart': 3, 'x_corrSteps': 7, 'y_corrSteps': 4, 'x_nrSteps': 4, 'y_nrSteps': 1, 'alienID': 22, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'untrained'},
      {'trialTrain': 2, 'x_fixStart': 0, 'y_fixStart': 1, 'x_corrSteps': 0, 'y_corrSteps': 3, 'x_nrSteps': 0, 'y_nrSteps': 2, 'alienID': 63, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'untrained_1D_first_leftout'},
      {'trialTrain': 3, 'x_fixStart': 3, 'y_fixStart': 1, 'x_corrSteps': 6, 'y_corrSteps': 4, 'x_nrSteps': 3, 'y_nrSteps': 3, 'alienID': 34, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'train_2D_new'},
      {'trialTrain': 4, 'x_fixStart': 3, 'y_fixStart': 4, 'x_corrSteps': 4, 'y_corrSteps': 5, 'x_nrSteps': 1, 'y_nrSteps': 1, 'alienID': 52, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'untrained'},
      {'trialTrain': 5, 'x_fixStart': 2, 'y_fixStart': 0, 'x_corrSteps': 5, 'y_corrSteps': 4, 'x_nrSteps': 3, 'y_nrSteps': 4, 'alienID': 35, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'untrained'},
      {'trialTrain': 6, 'x_fixStart': 4, 'y_fixStart': 1, 'x_corrSteps': 6, 'y_corrSteps': 5, 'x_nrSteps': 2, 'y_nrSteps': 4, 'alienID': 45, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'train_2D_repeat'},
      {'trialTrain': 7, 'x_fixStart': 3, 'y_fixStart': 0, 'x_corrSteps': 4, 'y_corrSteps': 0, 'x_nrSteps': 1, 'y_nrSteps': 0, 'alienID': 51, 'testlen': 72, 'version': 'test_exp', 'trial_label': 'train_1D_sec_new'}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
    Routine loadparams
    LoopInitiator moveLoop_test loopType="TrialHandler"
      loopType = sequential
      nReps = repChoice
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      Routine testGrid
    LoopTerminator moveLoop_test
    Routine fixation_2
    Routine setconfig
  LoopTerminator experiment
  Routine earlyStop
  LoopInitiator mini_instr2_trials loopType="TrialHandler"
    loopType = sequential
    nReps = instrep2
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    Routine instr_2
  LoopTerminator mini_instr2_trials
  Routine endExp
